<CompuCell3D Revision="5" Version="4.7.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
      <MCSConversionFactor DisplayName="No conversion" Units="-">1.0</MCSConversionFactor>
      <VoxelConversionFactor DisplayName="No conversion" Units="-">1.0</VoxelConversionFactor>
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="TumorCell"/>
      <CellType TypeId="2" TypeName="BloodVessel"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="TumorCell">10.0</Energy>
      <Energy Type1="Medium" Type2="BloodVessel">10.0</Energy>
      <Energy Type1="TumorCell" Type2="TumorCell">10.0</Energy>
      <Energy Type1="TumorCell" Type2="BloodVessel">10.0</Energy>
      <Energy Type1="BloodVessel" Type2="BloodVessel">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="80" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>TumorCell,BloodVessel</Types>
      </Region>
   </Steppable>
</CompuCell3D>
